# 1 "/home/waudbyc/pp_701/zgesgp.cw"
;zgesgp.cw
;using baseopt
;avance-version (07/10/04)
;1D sequence
;water suppression using excitation sculpting with gradients
;T.-L. Hwang & A.J. Shaka, J. Magn. Reson.,
;   Series A 112 275-279 (1995)
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


prosol relations=<triple>
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"p2=p1*2"
"d12=20u"


"p12=2000u"
"spw11=plw1*(pow(p1*2/p12,2))" 
"spoffs11=0"
"spoal11=0.5"
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"TAU=de+p1*2/3.1416+50u"
"acqt0=de"

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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  d12 pl1:f1 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  d1
  8u

  p1 ph1
  
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p16:gp1
  d16 pl0:f1
  (p12:sp11 ph2:r):f1
  4u
  d12 pl1:f1

  p2 ph3
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  4u
  p16:gp1
  d16 
  TAU
  p16:gp2
  d16 pl0:f1
  (p12:sp11 ph4:r):f1
  4u
  d12 pl1:f1

  p2 ph5

  4u
  p16:gp2
  d16
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  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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  4u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
exit


ph1=0
ph2= 0 1 0 1  2 3 2 3  0 1 0 1  2 3 2 3
ph3= 2 3 2 3  0 1 0 1  2 3 2 3  0 1 0 1 
ph4= 0 0 1 1  0 0 1 1  2 2 3 3  2 2 3 3 
ph5= 2 2 3 3  2 2 3 3  0 0 1 1  0 0 1 1 
ph31=0 2 2 0  0 2 2 0  0 2 2 0  0 2 2 0
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;pl0 : 120dB
;pl1 : f1 channel - power level for pulse (default)
;sp1 : f1 channel - shaped pulse 180 degree
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse (Squa100.1000)   [2 msec]
;p16: homospoil/gradient pulse
;d1 : relaxation delay; 1-5 * T1
;d12: delay for power switching                             [20 usec]
;d16: delay for homospoil/gradient recovery
;NS: 8 * n, total number of scans: NS * TD0
;DS: 4
;spnam11: Squa100.1000

;use gradient ratio:    gp 1 : gp 2
;                         31 :   11

;for z-only gradients:
;gpz1: 31%
;gpz2: 11%
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;use gradient files:
;gpnam1: SMSQ10.100
;gpnam2: SMSQ10.100


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;$Id: zgesgp,v 1.5.6.1 2007/10/04 16:52:07 ber Exp $
